PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  color = black
  expName = ldt
  keyboardBackend = ioHub
  logging level = warning
  measureFrameRate = False
  runMode = 0
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Routines
  Routine welcomeRoutine
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    TextComponent instructionText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the lexical decision task!

        You are about to see a series of characters.

        If the characters make up a word,
        press the RIGHT arrow key.

        If the characters do not make up a word,
        press the LEFT arrow key.

        Press SPACE to begin.
    KeyboardComponent startKeyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine conditionRoutine
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    TextComponent conditionText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $characters
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    KeyboardComponent responseKeyboard
      allowedKeys = 'left','right'
      correctAns = $answer
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine exitRoutine
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    TextComponent thankYouText
      letterHeight = 0.05
      pos [set every repeat] = [0,0]
      startVal [time (s)] = 0.0
      text = Please wait while we save your results...
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    CodeComponent code
      Code Type = JS
      Begin JS Routine:
        // Disable downloading results to browser
        psychoJS._saveResults = 0;

        // Generate filename for results
        let filename = psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime + '.csv';

        // Extract data object from experiment
        let dataObj = psychoJS._experiment._trialsData;

        // Convert data object to CSV
        let data = [Object.keys(dataObj[0])].concat(dataObj).map(it => {
            return Object.values(it).toString()
        }).join('\n')

        // Send data to OSF via DataPipe
        console.log('Saving data...');
        fetch('https://pipe.jspsych.org/api/data', {
            method: 'POST',
            headers: {
                'Content-Type': 'application/json',
                Accept: '*/*',
            },
            body: JSON.stringify({
                experimentID: 'YruCWGCD6czQ', // ⭑ UPDATE WITH YOUR DATAPIPE EXPERIMENT ID ⭑
                filename: filename,
                data: data,
            }),
        }).then(response => response.json()).then(data => {
            // Log response and force experiment end
            console.log(data);
            quitPsychoJS();
        })
Flow
  Routine welcomeRoutine
  LoopInitiator conditionLoop loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word', 'cat'), ('isWord', 1)]),
      OrderedDict([('word', 'bar'), ('isWord', 1)]),
      OrderedDict([('word', 'tea'), ('isWord', 1)]),
      OrderedDict([('word', 'ghs'), ('isWord', 0)]),
      OrderedDict([('word', 'jul'), ('isWord', 0)]),
      OrderedDict([('word', 'pok'), ('isWord', 0)])]
    Routine conditionRoutine
  LoopTerminator conditionLoop
  Routine exitRoutine
